PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ID[아무숫자]'], expName, expInfo['date'])
  Experiment info = {'ID[아무숫자]': '', '코드: PsychoPy[1]/PsychoJS[2]': '', '지연요소: 없음[0]/키입력직후[1]': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = White
  expName = PsychPyBuilder-PsychJsOnline_jjy
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine wait
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        ptime = 1/60    # 자극 제시시간[기본값: 16.7 ms = 60 Hz 모니터 기준 1프레임]
        mtime = 3/60    # 검은 화면 제시시간
        btime0 = 3/60   # 빈 화면 제시시간

        participant = int(expInfo['ID[아무숫자]'])

        delay = (expInfo['지연요소: 없음[0]/키입력직후[1]'])
        if delay == '1':
            btime = 0
        else:
            btime = btime0

        if expInfo['코드: PsychoPy[1]/PsychoJS[2]'] == '1':
            pyjs= 'Builder-PsychoPy'
        elif expInfo['코드: PsychoPy[1]/PsychoJS[2]'] == '2':
            pyjs = 'Builder-PsychoJS'
      Begin Routine:
        ptime_txt = pyjs + str(round(ptime*1000)) + '_'  + str(id)
  Routine ptarget
    ImageComponent target
      image = stim/900x600_25_100000.jpg
      size = (900, 600)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ptime
      units = pix
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    TextComponent text
      color = black
      letterHeight = 20
      pos = (0, 350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ptime
      text [set every repeat] = $ptime_txt
      units = pix
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        t_timer = new util.Clock();
      Begin Routine:
        t_timer = core.Clock()
      End JS Routine:
        t_program = t_timer.getTime();
        psychoJS.experiment.addData("t_program", t_program);
        psychoJS.experiment.addData("t", ptime);
      End Routine:
        t_program = t_timer.getTime()
        thisExp.addData('t_program', t_program)
        thisExp.addData('t', ptime)
  Routine pmask
    ImageComponent mask
      image = stim/900x600_Black.jpg
      size = (900, 600)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = mtime
      units = pix
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    TextComponent text_2
      color = black
      letterHeight = 20
      pos = (0, 350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = mtime
      text [set every repeat] = $ptime_txt
      units = pix
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  Routine blank
    PolygonComponent rect
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (900, 600)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $btime
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_psychopy.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 0},
      {'id': 1},
      {'id': 2},
      {'id': 3},
      {'id': 4},
      {'id': 5},
      {'id': 6},
      {'id': 7},
      {'id': 8},
      {'id': 9}]
    Routine wait
    Routine blank
    Routine ptarget
    Routine pmask
  LoopTerminator trials
